PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroop
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Routines
  Routine trial
    TextComponent target
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      text [set every repeat] = $word
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    KeyboardComponent response
      allowedKeys = 'left','right','up','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Hello, welcome!
        asdf
    KeyboardComponent key_res
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stroop_conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word', 'red'), ('color', 'red'), ('congruent', 1), ('corrAns', 'left')]),
      OrderedDict([('word', 'red'), ('color', 'green'), ('congruent', 0), ('corrAns', 'down')]),
      OrderedDict([('word', 'blue'), ('color', 'green'), ('congruent', 0), ('corrAns', 'down')])]
    Routine trial
  LoopTerminator trials
